PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PFE
  keyboardBackend = ioHub
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Video/ball-elongated-1.avi
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration_1
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
